opentrons/protocol-designer 1.1.1
protocol-schema: 1.0.0
protocol-name: 8F-by-11R_PCR_test-2
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p10_multi: {model: p10_multi_v1.3, mount: right}
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  Trash: {model: fixed-trash, slot: 12}
  opentrons tiprack 300ul (1): {model: opentrons-tiprack-300ul, slot: 2}
  PCR: {model: 96-PCR-tall, slot: 9}
  Solutions: {model: opentrons-tuberack-2ml-eppendorf, slot: 7}
  PrimerMix: {model: 96-PCR-tall, slot: 5}
  tiprack 10ul (2): {model: tiprack-10ul, slot: 3}
pipetteTiprackAssignments:
  p10_multi: tiprack-10ul
  p300_single: opentrons-tiprack-300ul
ingredients:
  - Master Mix: {description: Master mix with DNA}
  - PF-1: {description: Primer Fwd 1}
  - PF-2: {description: Primer Fwd 2}
  - PF-3: {description: Primer Fwd 3}
  - PF-4: {description: Primer Fwd 4}
  - PF-5: {description: Primer Fwd 5}
  - PF-6: {description: Primer Fwd 6}
  - PF-7: {description: Primer Fwd 7}
  - PF-8: {description: Primer Fwd 8}
  - PR-1: {description: Primer Rev 1}
  - PR-2: {description: Primer Rev 2}
  - PR-3: {description: Primer Rev 3}
  - PR-4: {description: Primer Rev 4}
  - PR-5: {description: Primer Rev 5}
  - PR-6: {description: Primer Rev 6}
  - PR-7: {description: Primer Rev 7}
  - PR-8: {description: Primer Rev 8}
  - PR-9: {description: Primer Rev 9}
  - PR-10: {description: Primer Rev 10}
  - PR-11: {description: Primer Rev 11}
ingredLocations:
  Solutions:
    Master Mix {volume: 1200}: A1, A2
    PF-1 {volume: 50}: A4
    PF-2 {volume: 50}: A5
    PF-3 {volume: 50}: A6
    PF-4 {volume: 50}: B1
    PF-5 {volume: 50}: B2
    PF-6 {volume: 50}: B3
    PF-7 {volume: 50}: B4
    PF-8 {volume: 50}: B5
    PR-1 {volume: 50}: C1
    PR-2 {volume: 50}: C2
    PR-3 {volume: 50}: C3
    PR-4 {volume: 50}: C4
    PR-5 {volume: 50}: C5
    PR-6 {volume: 50}: C6
    PR-7 {volume: 50}: D1
    PR-8 {volume: 50}: D2
    PR-9 {volume: 50}: D3
    PR-10 {volume: 50}: D4
    PR-11 {volume: 50}: D5
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 20
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6, A7-D7, A8-D8, A9-D9, A10-D10, A11-D11
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 30
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 20
  path: multiDispense
  changeTip: always
  aspirate_labware: Solutions
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: E1-H1, E2-H2, E3-H3, E4-H4, E5-H5, E6-H6, E7-H7, E8-H8, E9-H9, E10-H10, E11-H11
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 30
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: Solutions
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: Solutions
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: B1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: Solutions
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: C1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: Solutions
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: D1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: Solutions
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: E1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: Solutions
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: F1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: Solutions
  aspirate_wells: B4
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: G1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: Solutions
  aspirate_wells: B5
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: H1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: C1
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A2-H2
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: C2
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A3-H3
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: C3
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A4-H4
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: C4
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A5-H5
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: C5
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A6-H6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: C6
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A7-H7
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: D1
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A8-H8
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: D2
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A9-H9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: D3
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A10-H10
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: D4
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A11-H11
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Solutions
  aspirate_wells: D5
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  aspirate_mmFromBottom: 1
  dispense_labware: PrimerMix
  dispense_wells: A12-H12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: multiDispense
  changeTip: once
  aspirate_labware: PrimerMix
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A1-A11
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A1
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: PrimerMix
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
procedure:
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- pick-up-tip: {pipette: p300_single, labware: opentrons tiprack 300ul (1), well: A1}
- aspirate: {pipette: p300_single, volume: 290, labware: Solutions, well: A1, offsetFromBottomMm: 1}
- dispense: {pipette: p300_single, volume: 20, labware: PCR, well: A1, offsetFromBottomMm: 0.5}
- dispense: {pipette: p300_single, volume: 20, labware: PCR, well: B1, offsetFromBottomMm: 0.5}
- dispense: {pipette: p300_single, volume: 20, labware: PCR, well: C1, offsetFromBottomMm: 0.5}
- dispense: {pipette: p300_single, volume: 20, labware: PCR, well: D1, offsetFromBottomMm: 0.5}
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